PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = WN_task_online_ver3
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Routines
  Routine Pause1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine PauseCheck
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialCounter=0
      Begin Routine:
        trialCounter=trialCounter+1
      Each Frame:
        if not trialCounter in [3,6,9]:
            continueRoutine=False
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Pausona
  Routine routine_1
  Routine RT_comp
    CodeComponent RT_ISI_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        ISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin Routine:
        RTISI_dur=random.choice(ISIarray)
    TextComponent trial_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text = +
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    PolygonComponent polygon
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      lineWidth = 1.5
      nVertices = 50
      opacity [set every repeat] = VisOpacity
      shape = regular polygon...
      size = (0.07, 0.07)
      startEstim = 2
      startVal [time (s)] = $RTISI_dur
      stopVal [time (s)] = 4.5
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    KeyboardComponent RT_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.5
      store = first key
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    SoundComponent sound_1
      durationEstim = 0.1
      sound [set every repeat] = $SoundFileName
      startEstim = 2
      startVal [time (s)] = $RTISI_dur
      volume [set every repeat] = sound_vol
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    CodeComponent Block1_store_info
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("ISI", RTISI_dur)
        thisExp.addData("block", curr_block)
  Routine RT_ISI
    CodeComponent RT_ISI_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        ISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin Routine:
        RTISI_dur=random.choice(ISIarray)
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = $RTISI_dur
      text = +
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    TextComponent text_7
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $RTISI_dur
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  Routine sound_block
  Routine play_sound
  Routine RTStim
    TextComponent RTstim_fix
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    PolygonComponent RTStim_poly
      durationEstim = 0.5
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      shape = regular polygon...
      size = (0.09, 0.09)
      startEstim = 0.3
      startVal [time (s)] = $polystart
      stopVal [condition] = stop_draw_pol
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    KeyboardComponent RTStim_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 2
      store = first key
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    CodeComponent poly_start_code
      Code Type = Auto->JS
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      Begin Experiment:
        polystart_array=[0.3, 0.35, 0.4, 0.45, 0.5, 0.55, 0.6, 0.7]
      Begin Routine:
        polystart = random.choice(polystart_array)
    CodeComponent poly_stop_code
      Code Type = Auto->JS
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      Begin Routine:
        stop_draw_pol=False
      Each Frame:
        if t > (polystart+1):
            stop_draw_pol=True


        if RTStim_resp.status == STARTED:
            if RTStim_resp.keys=="space":
                stop_draw_pol=True
    CodeComponent RTstim_addinfo_code
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData("block", "DuringStim")
        psychoJS.experiment.addData("stimstart", polystart)
      End Routine:
        thisExp.addData("block", "DuringStim")
        thisExp.addData("stimstart", polystart)
    CodeComponent Stim_ISI_code_backup
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        StimISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin Routine:
        StimISI_dur=random.choice(StimISIarray)
  Routine RTStim_ISI
    CodeComponent Stim_ISI_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        StimISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin Routine:
        StimISI_dur=random.choice(StimISIarray)
    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $StimISI_dur
      text = +
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    TextComponent text_8
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $StimISI_dur
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    CodeComponent set_sound_code
      Code Type = Auto->JS
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      Begin Routine:
        if (my_session==1):
            my_sound='sound_silence.wav'
        if (my_session==2):
            my_sound='white_noise1.wav'
        if (my_session==3):
            my_sound='sound_silence.wav'
  Routine Stim_pre
    TextComponent PreStim_fix
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    CodeComponent Cont_stim_code
      Code Type = Both
      Begin Experiment:
        if my_session==1:
            background_sound_pre = sound.Sound('white_noise_bg.wav')

        if my_session==2:
            background_sound_pre = sound.Sound('white_int_noise_bg2.wav')

        if my_session==3:
            background_sound_pre = sound.Sound('pink_noise_bg.wav')
      Begin JS Experiment:
        if (my_session == 1){
        background_sound_pre = new sound.Sound({     win: psychoJS.window,     value: 'white_noise_bg.wav',     secs: -1,     });
        }

        if (my_session == 2){
        background_sound_pre = new sound.Sound({     win: psychoJS.window,     value: 'white_int_noise_bg2.wav',     secs: -1,     });
        }

        if (my_session == 3){
        background_sound_pre = new sound.Sound({     win: psychoJS.window,     value: 'pink_noise_bg.wav',     secs: -1,     });
        }
      Begin JS Routine:
        background_sound_pre.setVolume(sound_vol);
        background_sound_pre.play();
      Begin Routine:
        background_sound_pre.setVolume(sound_vol)
        background_sound_pre.play()
      End JS Routine:
        /*
        if my_session==2:
        background_sound_pre.stop()
        */
      End Routine:
        '''
        if my_session==2:
            background_sound_pre.stop()
            '''
    KeyboardComponent PreStim_key
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      store = nothing
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    TextComponent Pred_debug
      disabled = True
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = Premi q per saltare
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  Routine Instr2
    TextComponent Instr_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Instruction here
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stim_post
    TextComponent PostStim_fix
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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    KeyboardComponent PostStim_key
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      store = nothing
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    TextComponent Post_debug
      disabled = True
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Premi q per uscire
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        background_sound_pre.stop()
  Routine End
    TextComponent End_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Grazie della partecipazione!
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  Routine Instr_exp
    TextComponent Instr_comp1_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Adesso comincerà il compito vero e proprio.
        Siediti normalmente al computer come se dovessi scrivere.
        Vedrai al centro dello schermo una croce nera.
        Tieni lo sguardo sulla croce.
        A intervalli casuali comparirà un cerchio rosso oppure potrai sentire un breve suono.
        In entrambi i casi dovrai rispondere premendo la Barra Spaziatrice il più velocemente possibile appena uno dei due stimoli (cerchio o suono) comparirà.

        Terminato questo compito riceverai ulteriori istruzioni.

        Premi il tasto "c" per continuare.
    KeyboardComponent Instr_task_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent debug_volume_txt
      disabled = True
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sound_vol
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    TextComponent debug_vol_max
      disabled = True
      letterHeight = 0.1
      pos = (-0.1, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $max_vol
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    TextComponent debug_vol_min
      disabled = True
      letterHeight = 0.1
      pos = (0.1, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $min_vol
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    CodeComponent set_block_name_pre
      Code Type = Auto->JS
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      Begin Routine:
        curr_block="PreStim"
  Routine Instr_staircase
    TextComponent hear_sc_fix
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.2
      text = +
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    SoundComponent stair_sound
      durationEstim = 0.1
      sound = sound_cue.wav
      startVal [time (s)] = 0.2
      volume [set every repeat] = curr_volume
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    KeyboardComponent hear_sc_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent hear_sc_code
      Code Type = Auto->JS
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      Begin Experiment:
        # here intialize some variables
        ini_volume=0.2
        curr_volume=ini_volume
        last_response='up'
        tot_sc_trials=100
        volumes_array=[1]*tot_sc_trials
        hear_sc_ntrial=1
      End Routine:
        curr_response = hear_sc_resp.keys
        vol_ind=hear_sc_ntrial-1
        volumes_array[vol_ind]=curr_volume

        if curr_response=='up':
            curr_volume=curr_volume+curr_volume*0.25

        if curr_response=='down':
            curr_volume=curr_volume-curr_volume*0.25

        if  (curr_response!=last_response) and hear_sc_ntrial!=1:
             curr_volume=ini_volume

        last_response = curr_response
        hear_sc_ntrial=hear_sc_ntrial+1
    TextComponent debug_volume
      disabled = True
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text [set every repeat] = $curr_volume
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    TextComponent hc_instr1
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0
      text = Premi "freccia giù" se hai sentito il suono 
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    TextComponent hc_instr2
      color = black
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Premi "freccia su" se non hai sentito il suono
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  Routine hear_staircase
  Routine Instr_Staircase
    TextComponent Instr_staircase_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Benvenuto!

        In questo esperimento dovrai ascoltare alcuni suoni ed effettuare alcuni compiti.
        Come prima cosa ti chiediamo di impostare il volume del tuo computer al massimo.
        Ci sarà una breve sessione in cui ti chiederemo di premere i tasti "freccia su" e "freccia giù"
        in base a delle istruzioni sullo schermo.

        Premi il tasto "c" per continuare
    KeyboardComponent key_resp_5
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine set_sound_volume
    CodeComponent set_volume_code
      Code Type = Auto->JS
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      End Routine:
        max_vol = max(volumes_array)
        min_vol = min(volumes_array)
        sound_vol=(max_vol-min_vol)/3

        thisExp.addData('Final_Volume', sound_vol)
  Routine Instr_block_pre
    TextComponent Instr_pre_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr_stim_pre
    TextComponent Instr_stim_pre_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Ben fatto!
        Ora vedrai di nuovo la croce nera.
        Tieni lo sguardo sulla croce e rilassati.
        Sentirai una traccia audio in sottofondo per qualche minuto ma non dovrai fare nulla.
        Ad un certo punto vedrai ricomparire il cerchio rosso.
        Ogni volta che comparirà, dovrai premere la Barra Spaziatrice il più velocemente possibile, come nel task precedente.

        Quando il cerchio smetterà di comparire, dovrai rilassarti e continuare ad ascoltare la traccia audio, per qualche minuto.
        Terminata quella sessione ti daremo nuove istruzioni

        Premi il tasto "c" per continuare.
    KeyboardComponent Instr_stim_pre_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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  Routine Stim_post_2
    TextComponent text_13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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    KeyboardComponent key_resp_9
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    TextComponent debug_text14
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = premi q per uscire
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  Routine set_session
    CodeComponent Session_code
      Code Type = Auto->JS
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      Begin Experiment:
        from math import floor
        session_nr = int(expInfo['session'])
        subject_nr = int(expInfo['participant'])

        counterb_list = [(1, 2, 3), (1, 3, 2), (2, 1, 3), (2, 3, 1), (3, 1, 2), (3, 2, 1)]
        tot_levels = len(counterb_list)

        k = subject_nr - (tot_levels*floor(subject_nr/tot_levels)) - 1;

        my_session = counterb_list[k][session_nr-1]



        if my_session == 1:
            ExpList = 'WN_RTblock1_ExpList.xlsx'

        if my_session == 2:
            ExpList = 'WN_RTblock2_ExpList.xlsx'

        if my_session == 3:
            ExpList = 'WN_RTblock3_ExpList.xlsx'
  Routine debug_session
    CodeComponent debug_str_code2
      Code Type = Auto->JS
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      Begin Experiment:
        debug_string=str(counterb_list[k])+' '+str(counterb_list[k][session_nr-1])
    TextComponent debug_txt2_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $debug_string
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    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine=True
    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Premi q per continuare
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  Routine Sound_int
    CodeComponent set_sound_code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (my_session==1):
            my_sound='sound_silence.wav'
        if (my_session==2):
            my_sound='white_noise1.wav'
        if (my_session==3):
            my_sound='sound_silence.wav'
    CodeComponent Sount_int_code
      Code Type = Both
      Begin JS Routine:
        trial_sound = new sound.Sound({     win: psychoJS.window,     value: 'sound_cue.wav',     secs: -1,     });
      Begin Routine:
        trial_sound = sound.Sound('sound_cue.wav')
      End JS Routine:
        if ((my_session === 2)) {
            trial_sound.setVolume(sound_vol);
            trial_sound.play();
        }
      End Routine:
        if my_session==2:
            trial_sound.setVolume(sound_vol)
            trial_sound.play()
    CodeComponent Stim_ISI_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        StimISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin Routine:
        StimISI_dur=random.choice(StimISIarray)
  Routine RTcomp
    TextComponent RTcomp_fix
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    PolygonComponent RTcomp_poly
      durationEstim = 0.5
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      opacity [set every repeat] = $VisOpacity
      shape = regular polygon...
      size = (0.09, 0.09)
      startEstim = 0.5
      startVal [time (s)] = $stimstart
      stopVal [condition] = stop_draw_stim
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    KeyboardComponent RTcomp_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 2
      store = first key
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    SoundComponent RTcomp_sound
      durationEstim = 0.2
      sound [set every repeat] = $SoundFileName
      startEstim = 0.5
      startVal [time (s)] = $stimstart
      volume [set every repeat] = sound_vol
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    CodeComponent stim_start_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        stimstart_array=[0.3, 0.35, 0.4, 0.45, 0.5, 0.55, 0.6, 0.7]
      Begin Routine:
        stimstart = random.choice(polystart_array)
    CodeComponent stim_stop_code_2
      Code Type = Auto->JS
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      Begin Routine:
        stop_draw_stim=False
      Each Frame:
        if t > (stimstart+1):
            stop_draw_stim=True


        if RTcomp_resp.status == STARTED:
            if RTcomp_resp.keys=="space":
                stop_draw_stim=True
    CodeComponent RTcomp_addinfo_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("block", curr_block)
        thisExp.addData("stimstart", stimstart)
    CodeComponent RTcomp_ISI_code_backup
      Code Type = Both
      Begin Experiment:
        import random
        RTISIarray=[1.5, 1.6, 1.7, 1.8, 1.9, 2.0, 2.1, 2.2, 2.3, 2.4, 2.5]
      Begin JS Routine:
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min; //The maximum is exclusive and the minimum is inclusive
        }

        ISI_temp = getRandomInt(1500, 2500)
        RTISI_dur = ISI_temp/1000
      Begin Routine:
        RTISI_dur=random.choice(StimISIarray)
  Routine Instr_comp2
    TextComponent Instr_comp2_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Quasi finito!
        Ora dovrai rifare lo stesso task che hai completato per primo: cerchio e suono compariranno ad intervalli casuali.
        Rispondi il più veloce possibile con la Barra Spaziatrice.

        Premi il tasto "c" per continuare.
    KeyboardComponent Instr_comp2_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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    CodeComponent set_curr_name_post
      Code Type = Auto->JS
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      Begin Routine:
        curr_block="PostStim"
Flow
  Routine set_session
  Routine Instr_Staircase
  LoopInitiator hear_staircase_loop loopType="TrialHandler"
    loopType = sequential
    nReps = tot_sc_trials
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    Routine Instr_staircase
  LoopTerminator hear_staircase_loop
  Routine set_sound_volume
  Routine Instr_exp
  LoopInitiator RT1_trials loopType="TrialHandler"
    conditionsFile = WN_RT_ExpList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav'), ('VisOpacity', 1)])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
    Routine RTcomp
  LoopTerminator RT1_trials
  Routine Instr_stim_pre
  Routine Stim_pre
  LoopInitiator Stim_trials loopType="TrialHandler"
    conditionsFile = WN_RTblock1_ExpList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')]),
      OrderedDict([('StimType', 'vis'), ('SoundFileName', 'sound_silence.wav')])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
    Routine RTStim
  LoopTerminator Stim_trials
  Routine Stim_post
  Routine Instr_comp2
  LoopInitiator RT2_trials loopType="TrialHandler"
    conditionsFile = WN_RT_ExpList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'vis')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')]),
      OrderedDict([('StimType', 'sound')])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
    Routine RTcomp
  LoopTerminator RT2_trials
  Routine End
